OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x8c1fc55b = 1.0
0x9f5c4075 = Neurofeedback example
0xf6b2e3fa = bci-examples
0xf8034a49 = Inria
Comment
  Overview

  Esse cenário capta sinais na faixa Alpha (Entre 7 e 13Hz)
  que demonstra o estado de relaxamento do usuário.
Comment
  Selecão de canal(is)
  Canais de grande influência : O2, O1, P4, P3
  (parte traseira da cabeça)
Comment
  Filtering in the [7-13Hz] frequency band
  and display
Comment
  Selection of 1sec epochs
  every 0.1sec.
Comment
  Averaging the squared signal
Comment
  Averaging the 4 last epochs
Comment
  Crop the signal between
  Mean + 3 * Variance
  and
  Mean + 6 * Variance
Comment
  This two boxes are configured
  with respect to a previous calibration session.

  The calibration computed
   the Mean and Variance
  of the Alpha activity during 30sec of inactivity.
Comment
  Center all values on
  Mean + 3 * Variance
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Alpha band.
Comment
  Exportar dados/comandos

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations, Input stream 4=#0.Channel localisation -> Identity => #1
#1.Output stream 2 -> Reference Channel
  Channel = 5
  Channel Matching Method = Smart
-> Channel Selector "8 (O2?)"
  Channel List = 8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band Stop
  Filter order = 5
  Low cut frequency (Hz) = 56
  High cut frequency (Hz) = 64
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.100000
-> Simple DSP
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Crop
  Crop method = Min/Max
  Min crop value = 12.033257
  Max crop value = 40.740842
-> Simple DSP => #11
  Equation = x-26.387050
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 10
-> 0x341d3912 Python scripting => #13
  Clock frequency (Hz) = 64
  Script = C:/Users/admin/Desktop/signalMean.py
-> 0x341d3912 Matrix Display "SAIDA?"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#13 -> TCP Writer
  Port = 5678
  Output format = Raw
Data=#11 -> Signal display "Alpha power"
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 30
  Vertical Offset = 0
  Time Scale = 20
  Horizontal ruler = true
  Vertical ruler = true
  Multiview = false
#11 -> Matrix Display "Alpha Power as color"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#5, Stimulations=#1.Output stream 3 -> Signal display "Alpha signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#0.Signal stream -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
