OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Ver media e variancia de epochings
Comment
  FFT procurar frequencias
Comment
  Truncar valores para intervalo e
  avaliar frequencia de passagem
  BPS

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> 0x341d3912 Remover Ruido
  Channel = 1
  Channel Matching Method = Smart
#0.Signal stream -> Channel Selector "6:9" => #2
  Channel List = 6:9
  Action = Select
  Channel Matching Method = Smart
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Crop
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
-> Zero-Crossing Detector
  Hysteresis threshold = 0.01
  Rythm estimation window (in sec) = 10
  Negative-to-positive stimulation = OVTK_StimulationId_ThresholdPassed_Positive
  Positive-to-negative stimulation = OVTK_StimulationId_ThresholdPassed_Negative
#2 -> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
-> Epoch average
  Averaging type = Moving epoch average
  Epoch count = 4
-> Epoch variance
  Averaging type = Moving epoch average
  Epoch count = 4
  Significance level = 0.01
#2 -> Spectral Analysis
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
