OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  OpenBCI
Comment
  Seleciona canais 1 e 2 (parte frontal)
  em busca de relação entre seus sinais




  (mostra o piscar de olhos diferentes)



  e mostra ao usuário
Settings
  Setting 1 = 0

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 20
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "1:2" => #2
  Channel List = 1:2
  Action = Select
  Channel Matching Method = Smart
-> Common Average Reference
-> Connectivity Measure => #4
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 1-2
  Channel Matching Method = Index
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Connectivity Measure => #6
  Method = Single-Trial Phase Locking Value
  Pairs of channels = 1-2
  Channel Matching Method = Index
Data=#6 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 8
  Band Pass Ripple (dB) = 0.5
-> Spectral Analysis => #9
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#9.Amplitude -> Spectrum Average
  Considers zeros = false
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Modifiable Temporal filter
  Filter method = Butterworth
  Filter type = Band Pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5

Zero-Crossing Detector
  Hysteresis threshold = 0.01
  Rythm estimation window (in sec) = 10
  Negative-to-positive stimulation = OVTK_StimulationId_ThresholdPassed_Positive
  Positive-to-negative stimulation = OVTK_StimulationId_ThresholdPassed_Negative
