OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Set this channel selector
  to 1:16 for Cyton+Daisy
  and 1:4 for Ganglion
Comment
  Set this channel selector
  to 17:19 for Cyton+Daisy
Comment
  Adjust Gain on Instant Bars as needed.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:8" => #1
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 50
  Pass band ripple (dB) = 0.5
-> Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 2
  Low cut frequency (Hz) = 58
  High cut frequency (Hz) = 62
  Pass band ripple (dB) = 0.5
Data=#3 -> Signal display "Filtered EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#3 -> Time based epoching
  Epoch duration (in sec) = 3
  Epoch intervals (in sec) = 0.062500
-> Spectral Analysis => #6
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 0.001
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#1 -> Signal display "Raw EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 5
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Channel Selector "9:11"
  Channel List = 9:11
  Action = Select
  Channel Matching Method = Smart
-> Channel Rename => #10
  New channel names = X;Y;Z
-> Univariate Statistics => #11
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
Data=#11.Variance -> Signal display "Movement"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> Signal average
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
