OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  This scenario allows to visualize the signal coming from eeg cap through the acquisition server.

  For the experiment, FCz, C1, Cz, C2 and CPz are used
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_session_example.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal stream -> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#1.Signal stream -> Channel Selector "FCz;C1;Cz;C2;CPz" => #4
  Channel List = FCz;C1;Cz;C2;CPz
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#5 -> Signal display "Signal 4-40Hz"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#4 -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
