OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Overview

  This scenario allows to run
  an online self-paced session of feet motor imagery
  No instructions are presented to the user.

  The feedback is presented through signal displays : one for the brain
  activity on the Cz electrode, and one for the band power in
  the beta activity,related to (imagined) feet movement.

  An external feedback is possible through VRPN:
  launch the vr-demo-tie-fighter to see  a spaceship
  lifted when a spike of Beta activity is detected.

  For more information on the processing pipeline,
  please look at the scenario neurofeedback/neurofeedback.xml.
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals
Comment
  Adaptar Canais!!!!
Comment
  The processing chain filter the signal
   in the [16-24Hz] frequency band (Beta band)
  Then, it select 1s epochs every 0.1s.
  This signal is squared and average to get the Beta power.

  Finally it's cropped and shifted to be sent
   to the tie-fighter application via VRPN
Comment
  These two boxes (Crop and simple DSP)  are configured
  with respect to a previous calibration session.
  See threshold_movement_calibration.xml

  The calibration computed the Mean and Variance
  of the Beta activity during 30sec of inactivity.
Comment
  Crop the signal between
  Mean + 3 * sqrt(Variance)
  and 100
Comment
  Center all values on
  Mean + 3 * sqrt(Variance)
Comment
  VRPN
  The button Server tells the tie-fighter application
  in which step the experiment is. It also triggers
  the instructions given to the user.

  The Analog Server provides the feedback value.
Comment
  The signal display provides
  real-time and asynchronous feedback of the user's
  brain activity in the Beta band,
  related to feet movement.

Generic stream reader
  Filename = ${Player_ScenarioDirectory}/signals/workshop_session_example.ov

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Self-paced session => #2
  Lua Script = ${Player_ScenarioDirectory}/stim_Use-the-force_freeTime.lua
  First waiting time = 5
  Imaginary duration = 480
-> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = False
Input stream 1=#1.Signal stream, Input stream 2=#1.Experiment information, Input stream 3=#2, Input stream 4=#1.Channel localisation -> Identity => #4
#4.Output stream 1 -> Channel Selector "3;4;5;6;7" => #5
  Channel List = 3;4;5;6;7
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = -1;-1;4;-1;-1
  Number of Output Channels = 1
  Number of Input Channels = 5
  Filter matrix file =
-> Temporal filter "band-pass 16-24Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.1
-> Simple DSP "Band power"
  Equation = x*x
-> Signal average => #10
-> Crop => #11
  Crop method = Min/Max
  Min crop value = -1
  Max crop value = 1
Input stream 2=#11, Input stream 3=#2 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/Crop/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
#11 -> Simple DSP "Shift values" => #13
  Equation = x-13
Data=#13 -> Signal display "Beta Power Cropped and shifted"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#13 -> Analog VRPN server
  Peripheral name = openvibe-vrpn
Data=#10 -> Signal display "Beta Power"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 100
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#5, Stimulations=#4.Output stream 3 -> Signal display "Beta Signal"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input 1=#4.Output stream 3, Input 2=#4.Output stream 3, Input 3=#4.Output stream 3, Input 4=#4.Output stream 3, Input 5=#4.Output stream 3, Input 6=#4.Output stream 3, Input 7=#4.Output stream 3 -> Button VRPN server
  Peripheral name = openvibe-vrpn
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_01
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_03
  Button 3 ON = OVTK_StimulationId_Label_04
  Button 3 OFF = OVTK_StimulationId_Label_05
  Button 4 ON = OVTK_GDF_Stage_1
  Button 4 OFF = OVTK_StimulationId_Label_0C
  Button 5 ON = OVTK_GDF_Stage_2
  Button 5 OFF = OVTK_StimulationId_Label_0D
  Button 6 ON = OVTK_GDF_Stage_3
  Button 6 OFF = OVTK_StimulationId_Label_0E
  Button 7 ON = OVTK_GDF_Stage_4
  Button 7 OFF = OVTK_StimulationId_Label_0F
Input stream 1=#4.Output stream 2, Input stream 2=#4.Output stream 1, Input stream 3=#4.Output stream 3 -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/use-the-force-self-paced-[$core{date}-$core{time}].ov
  Use compression = true
