OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/signals/motor-imagery-csp-1-acquisition-[2019.10.08-08.40.22].ov
Generic stream reader => #1
  Filename = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/signals/motor-imagery-csp-1-acquisition-[2019.10.04-16.12.26].ov
Input signal 1=#1.Output Signal, Input stimulations 1=#1.Output Stimulations, Input signal 2=#0.Output Signal, Input stimulations 2=#0.Output Stimulations -> Signal Concatenation => #2
  Time out before assuming end-of-file (in sec) = 5
  End-of-file stimulation for input 1 = OVTK_StimulationId_ExperimentStop
  End-of-file stimulation for input 2 = OVTK_StimulationId_ExperimentStop
Input Signal=#2.Signal, Input Stimulations=#2.Stimulations -> Generic stream writer
  Filename = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/signals/motor-imagery-csp-1-acquisition-Concatenado.ov
  Use compression = false

0x341d3912 Generic stream reader
  Filename = C:/Users/admin/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/p300-speller-xDAWN/signals/p300-xdawn-online-[2019.08.27-10.43.27].ov
