OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Spatial Filter Training
0xf36a1567 = http://openvibe.inria.fr/p300-speller-xdawn/
0xf6b2e3fa = xDAWN P300 Speller
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario should be used to train
  the spatial filter using the xDAWN algorithm.

  Just configure the Generic Stream Reader
  box to point to the last file you recorded with
  scenario 1-acquisition and fast forward
  this scenario.

  At the end of the training, you will have line in
  the console about eigen values.
  Using a Player Controller the scenario will
  automatically pause at the end of the training.

  If you want details on this values, you should read
  http://www.icp.inpg.fr/~rivetber/Publications/references/Rivet2009a.pdf
Comment
  The preprocessing of the signal is
  performed here...

  Note: be sure that the
  sampling rate and sample count
  per buffer you use in the acquisition
  server are compatible with the actual
  signal decimation factor
Comment
  For prerecorded data to test this P300, see

  http://openvibe.inria.fr/datasets/

Generic stream reader => #0
  Filename = C:/Users/admin/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/p300-speller-xDAWN/signals/p300-xdawn-train-[2019.08.27-10.24.34].ov
#0.Output stream 2 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation
  Decimation factor = 5
-> Time based epoching => #3
  Epoch 1 duration (in sec) = 0.250000
  Epoch 1 intervals (in sec) = 0.250000
Input signal=#3, Input stimulations=#0.Output stream 3 -> Stimulation based epoching "Target Selection" => #4
  Epoch duration (in sec) = 0.600000
  Epoch offset (in sec) = 0.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
Stimulations=#0.Output stream 3, Session signal=#3, Evoked potential epochs=#4 -> xDAWN Spatial Filter Trainer
  Train stimulation = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/p300-spatial-filter.cfg
  Filter dimension = 3
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
